<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p1="clr-namespace:Harp.StepperDriver;assembly=Harp.StepperDriver"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Hardware</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
              <rx:Name>Commands</rx:Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:Device">
                <harp:OperationMode>Active</harp:OperationMode>
                <harp:OperationLed>On</harp:OperationLed>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Disabled</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName>COM4</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Events</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>DigitalInputs</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Events</Name>
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Register xsi:type="harp:ParseMessagePayload">
                <harp:Address>78</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:IsArray>false</harp:IsArray>
              </harp:Register>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>Events</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
          <rx:Period>PT0S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateEnableDigitalInputsPayload">
          <p1:EnableDigitalInputs>Input0 Input1 Input2 Input3</p1:EnableDigitalInputs>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Commands</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>D3</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>SetupM3</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateEnableDriverPayload">
                <p1:EnableDriver>Motor3</p1:EnableDriver>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateMotor3MicrostepResolutionPayload">
                <p1:Motor3MicrostepResolution>Microstep64</p1:Motor3MicrostepResolution>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateMotor3MaximumRunCurrentPayload">
                <p1:Motor3MaximumRunCurrent>0.2</p1:Motor3MaximumRunCurrent>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateMotor3HoldCurrentReductionPayload">
                <p1:Motor3HoldCurrentReduction>NoReduction</p1:Motor3HoldCurrentReduction>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateMotor3OperationModePayload">
                <p1:Motor3OperationMode>QuietMode</p1:Motor3OperationMode>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateDisableDriverPayload">
                <p1:DisableDriver>Motor0 Motor1 Motor2</p1:DisableDriver>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>4</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="0" To="5" Label="Source1" />
            <Edge From="0" To="6" Label="Source1" />
            <Edge From="1" To="7" Label="Source1" />
            <Edge From="2" To="7" Label="Source2" />
            <Edge From="3" To="7" Label="Source3" />
            <Edge From="4" To="7" Label="Source4" />
            <Edge From="5" To="7" Label="Source5" />
            <Edge From="6" To="7" Label="Source6" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>TestResolutionM3</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateMotor3StepRelativePayload">
                <p1:Motor3StepRelative>500</p1:Motor3StepRelative>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT2S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateMotor3MicrostepResolutionPayload">
                <p1:Motor3MicrostepResolution>Microstep32</p1:Motor3MicrostepResolution>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT4S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateMotor3MicrostepResolutionPayload">
                <p1:Motor3MicrostepResolution>Microstep16</p1:Motor3MicrostepResolution>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT6S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateMotor3MicrostepResolutionPayload">
                <p1:Motor3MicrostepResolution>Microstep8</p1:Motor3MicrostepResolution>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="3" To="7" Label="Source1" />
            <Edge From="3" To="10" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:SelectMany">
          <Name>TestModeM3</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:SelectMany">
          <Name>TestCurrentM3</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:SelectMany">
          <Name>TestHoldCurrentM3</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>D2</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>SetupM2</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="EnableDriver" />
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateEnableDriverPayload">
                <p1:EnableDriver>Motor2</p1:EnableDriver>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Motor2MicrostepResolution" />
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateMotor2MicrostepResolutionPayload">
                <p1:Motor2MicrostepResolution>Microstep8</p1:Motor2MicrostepResolution>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Motor2MaximumRunCurrent" />
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateMotor2MaximumRunCurrentPayload">
                <p1:Motor2MaximumRunCurrent>0.5</p1:Motor2MaximumRunCurrent>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Motor2HoldCurrentReduction" />
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateMotor2HoldCurrentReductionPayload">
                <p1:Motor2HoldCurrentReduction>NoReduction</p1:Motor2HoldCurrentReduction>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Motor2OperationMode" />
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateMotor2OperationModePayload">
                <p1:Motor2OperationMode>DynamicMovements</p1:Motor2OperationMode>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DisableDriver" />
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateDisableDriverPayload">
                <p1:DisableDriver>Motor0 Motor1 Motor3</p1:DisableDriver>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>4</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="0" To="6" Label="Source1" />
            <Edge From="0" To="8" Label="Source1" />
            <Edge From="0" To="10" Label="Source1" />
            <Edge From="0" To="12" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="13" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="13" Label="Source2" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="13" Label="Source3" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="13" Label="Source4" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="13" Label="Source5" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="13" Label="Source6" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>TestResolutionM2</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateMotor2StepRelativePayload">
                <p1:Motor2StepRelative>500</p1:Motor2StepRelative>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT2S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateMotor2MicrostepResolutionPayload">
                <p1:Motor2MicrostepResolution>Microstep32</p1:Motor2MicrostepResolution>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT4S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateMotor2MicrostepResolutionPayload">
                <p1:Motor2MicrostepResolution>Microstep16</p1:Motor2MicrostepResolution>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT6S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateMotor2MicrostepResolutionPayload">
                <p1:Motor2MicrostepResolution>Microstep8</p1:Motor2MicrostepResolution>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="3" To="7" Label="Source1" />
            <Edge From="3" To="10" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:SelectMany">
          <Name>TestModeM2</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:SelectMany">
          <Name>TestCurrentM2</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:SelectMany">
          <Name>TestHoldCurrentM2</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>D1</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>SetupM1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="EnableDriver" />
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateEnableDriverPayload">
                <p1:EnableDriver>Motor1 Motor2</p1:EnableDriver>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Motor1MicrostepResolution" />
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateMotor1MicrostepResolutionPayload">
                <p1:Motor1MicrostepResolution>Microstep8</p1:Motor1MicrostepResolution>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Motor1MaximumRunCurrent" />
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateMotor1MaximumRunCurrentPayload">
                <p1:Motor1MaximumRunCurrent>0.5</p1:Motor1MaximumRunCurrent>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Motor1HoldCurrentReduction" />
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateMotor1HoldCurrentReductionPayload">
                <p1:Motor1HoldCurrentReduction>NoReduction</p1:Motor1HoldCurrentReduction>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Motor1OperationMode" />
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateMotor1OperationModePayload">
                <p1:Motor1OperationMode>DynamicMovements</p1:Motor1OperationMode>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DisableDriver" />
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateDisableDriverPayload">
                <p1:DisableDriver>Motor0 Motor3</p1:DisableDriver>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>4</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="0" To="6" Label="Source1" />
            <Edge From="0" To="8" Label="Source1" />
            <Edge From="0" To="10" Label="Source1" />
            <Edge From="0" To="12" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="13" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="13" Label="Source2" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="13" Label="Source3" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="13" Label="Source4" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="13" Label="Source5" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="13" Label="Source6" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:SelectMany">
          <Name>TestResolutionM1</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:SelectMany">
          <Name>TestModeM1</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:SelectMany">
          <Name>TestCurrentM1</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:SelectMany">
          <Name>TestHoldCurrentM1</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>D0</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>SetupM0</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateEnableDriverPayload">
                <p1:EnableDriver>Motor0</p1:EnableDriver>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateMotor0MicrostepResolutionPayload">
                <p1:Motor0MicrostepResolution>Microstep64</p1:Motor0MicrostepResolution>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateMotor0MaximumRunCurrentPayload">
                <p1:Motor0MaximumRunCurrent>0.2</p1:Motor0MaximumRunCurrent>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateMotor0HoldCurrentReductionPayload">
                <p1:Motor0HoldCurrentReduction>NoReduction</p1:Motor0HoldCurrentReduction>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateMotor0OperationModePayload">
                <p1:Motor0OperationMode>QuietMode</p1:Motor0OperationMode>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateDisableDriverPayload">
                <p1:DisableDriver>Motor1 Motor2 Motor3</p1:DisableDriver>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>4</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="0" To="5" Label="Source1" />
            <Edge From="0" To="6" Label="Source1" />
            <Edge From="1" To="7" Label="Source1" />
            <Edge From="2" To="7" Label="Source2" />
            <Edge From="3" To="7" Label="Source3" />
            <Edge From="4" To="7" Label="Source4" />
            <Edge From="5" To="7" Label="Source5" />
            <Edge From="6" To="7" Label="Source6" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:SelectMany">
          <Name>TestResolutionM0</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:SelectMany">
          <Name>TestModeM0</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:SelectMany">
          <Name>TestCurrentM0</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:SelectMany">
          <Name>TestHoldCurrentM0</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Q</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ConfigureInput0</Name>
        <Description>0	EVENT_ONLY
16	STOP_MOTOR0_ON_RISING
17	STOP_MOTOR1_ON_RISING
18	STOP_MOTOR2_ON_RISING
19	STOP_MOTOR3_ON_RISING
32	STOP_MOTOR0_ON_FALLING
33	STOP_MOTOR1_ON_FALLING
34	STOP_MOTOR2_ON_FALLING
35	STOP_MOTOR3_ON_FALLING
</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" />
            </Expression>
            <Expression xsi:type="harp:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="harp:CreateMessagePayload">
                <harp:Address>68</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Value>2</harp:Value>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Commands</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>W</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ConfigureInput1</Name>
        <Description>0	EVENT_ONLY
16	STOP_MOTOR0_ON_RISING
17	STOP_MOTOR1_ON_RISING
18	STOP_MOTOR2_ON_RISING
19	STOP_MOTOR3_ON_RISING
32	STOP_MOTOR0_ON_FALLING
33	STOP_MOTOR1_ON_FALLING
34	STOP_MOTOR2_ON_FALLING
35	STOP_MOTOR3_ON_FALLING
</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" />
            </Expression>
            <Expression xsi:type="harp:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="harp:CreateMessagePayload">
                <harp:Address>69</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Value>2</harp:Value>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Commands</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>E</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ConfigureInput2</Name>
        <Description>0	EVENT_ONLY
16	STOP_MOTOR0_ON_RISING
17	STOP_MOTOR1_ON_RISING
18	STOP_MOTOR2_ON_RISING
19	STOP_MOTOR3_ON_RISING
32	STOP_MOTOR0_ON_FALLING
33	STOP_MOTOR1_ON_FALLING
34	STOP_MOTOR2_ON_FALLING
35	STOP_MOTOR3_ON_FALLING
</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" />
            </Expression>
            <Expression xsi:type="harp:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="harp:CreateMessagePayload">
                <harp:Address>70</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Value>18</harp:Value>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Commands</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>R</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ConfigureInput3</Name>
        <Description>0	EVENT_ONLY
16	STOP_MOTOR0_ON_RISING
17	STOP_MOTOR1_ON_RISING
18	STOP_MOTOR2_ON_RISING
19	STOP_MOTOR3_ON_RISING
32	STOP_MOTOR0_ON_FALLING
33	STOP_MOTOR1_ON_FALLING
34	STOP_MOTOR2_ON_FALLING
35	STOP_MOTOR3_ON_FALLING
</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" />
            </Expression>
            <Expression xsi:type="harp:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="harp:CreateMessagePayload">
                <harp:Address>71</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Value>35</harp:Value>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Commands</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="40" To="41" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>