<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>ImmediateSteps</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Steps" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>Left</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>250</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Format">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Register xsi:type="harp:FormatMessagePayload">
                <harp:Address>91</harp:Address>
                <harp:PayloadType>S32</harp:PayloadType>
              </harp:Register>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>Right</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>250</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="IntProperty">
                <Value>-1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="harp:Format">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Register xsi:type="harp:FormatMessagePayload">
                <harp:Address>91</harp:Address>
                <harp:PayloadType>S32</harp:PayloadType>
              </harp:Register>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="0" To="5" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="8" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>S-Stop</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>S</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Format">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Register xsi:type="harp:FormatMessagePayload">
                <harp:Address>91</harp:Address>
                <harp:PayloadType>S32</harp:PayloadType>
              </harp:Register>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Q-Enable W-Disable</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>Q</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Format">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Register xsi:type="harp:FormatMessagePayload">
                <harp:Address>32</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
              </harp:Register>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>W</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Format">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Register xsi:type="harp:FormatMessagePayload">
                <harp:Address>33</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
              </harp:Register>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="6" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>E-Quiet R-Dynamic</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>E</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Format">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Register xsi:type="harp:FormatMessagePayload">
                <harp:Address>38</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
              </harp:Register>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>R</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Format">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Register xsi:type="harp:FormatMessagePayload">
                <harp:Address>38</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
              </harp:Register>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="6" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Microsteps 1-8s 2-16s 3-32s 4-64s</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>D1</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Format">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Register xsi:type="harp:FormatMessagePayload">
                <harp:Address>42</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
              </harp:Register>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>D2</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Format">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Register xsi:type="harp:FormatMessagePayload">
                <harp:Address>42</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
              </harp:Register>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>D3</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>2</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Format">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Register xsi:type="harp:FormatMessagePayload">
                <harp:Address>42</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
              </harp:Register>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>D4</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>3</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Format">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Register xsi:type="harp:FormatMessagePayload">
                <harp:Address>42</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
              </harp:Register>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="12" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="12" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="12" Label="Source3" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source4" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>MaximumRmsAmps</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Amps RMS" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>4</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Format">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Register xsi:type="harp:FormatMessagePayload">
                <harp:Address>46</harp:Address>
                <harp:PayloadType>Float</harp:PayloadType>
              </harp:Register>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM4</harp:PortName>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="1" To="2" Label="Source2" />
      <Edge From="2" To="8" Label="Source1" />
      <Edge From="3" To="7" Label="Source1" />
      <Edge From="4" To="7" Label="Source2" />
      <Edge From="5" To="7" Label="Source3" />
      <Edge From="6" To="7" Label="Source4" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="8" To="9" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>