<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:p1="clr-namespace:Harp.StepperDriver;assembly=Harp.StepperDriver"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>D3</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateMotor1MaximumStepIntervalPayload">
          <p1:Motor1MaximumStepInterval>2000</p1:Motor1MaximumStepInterval>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateMotor1StepIntervalPayload">
          <p1:Motor1StepInterval>250</p1:Motor1StepInterval>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateMotor1StepAccelerationIntervalPayload">
          <p1:Motor1StepAccelerationInterval>10</p1:Motor1StepAccelerationInterval>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>StepperDriver Commands</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="0" To="3" Label="Source1" />
      <Edge From="1" To="4" Label="Source1" />
      <Edge From="2" To="4" Label="Source2" />
      <Edge From="3" To="4" Label="Source3" />
      <Edge From="4" To="5" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>