<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:p1="clr-namespace:Harp.StepperDriver;assembly=Harp.StepperDriver"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>D7</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateMotor1QuickMovementInitialSpeedPayload">
          <p1:Motor1QuickMovementInitialSpeed>2</p1:Motor1QuickMovementInitialSpeed>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateMotor1QuickMovementNominalSpeedPayload">
          <p1:Motor1QuickMovementNominalSpeed>200</p1:Motor1QuickMovementNominalSpeed>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateMotor1QuickMovementAccelerationPayload">
          <p1:Motor1QuickMovementAcceleration>5</p1:Motor1QuickMovementAcceleration>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateMotor1QuickMovementDistancePayload">
          <p1:Motor1QuickMovementDistance>20</p1:Motor1QuickMovementDistance>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>StepperDriver Commands</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="0" To="3" Label="Source1" />
      <Edge From="0" To="4" Label="Source1" />
      <Edge From="1" To="5" Label="Source1" />
      <Edge From="2" To="5" Label="Source2" />
      <Edge From="3" To="5" Label="Source3" />
      <Edge From="4" To="5" Label="Source4" />
      <Edge From="5" To="6" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>