<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:Harp.StepperDriver;assembly=Harp.StepperDriver"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="SubscribeSubject">
        <Name>StepperDriver Events</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateMotor1MicrostepResolutionPayload">
          <p1:Motor1MicrostepResolution>Microstep8</p1:Motor1MicrostepResolution>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateMotor1OperationModePayload">
          <p1:Motor1OperationMode>DynamicMovements</p1:Motor1OperationMode>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateAccumulatedStepsSamplingRatePayload">
          <p1:AccumulatedStepsSamplingRate>Rate100Hz</p1:AccumulatedStepsSamplingRate>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>StepperDriver Commands</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="1" To="3" Label="Source1" />
      <Edge From="1" To="4" Label="Source1" />
      <Edge From="2" To="5" Label="Source1" />
      <Edge From="3" To="5" Label="Source2" />
      <Edge From="4" To="5" Label="Source3" />
      <Edge From="5" To="6" Label="Source3" />
    </Edges>
  </Workflow>
</WorkflowBuilder>